PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1536, 864]
  Full-screen window = True
  expName = untitled
  Screen = 1
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Routines
  Routine trial
    SoundComponent sound_1
      sound = 440
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 2
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    PolygonComponent polygon
      shape = cross
      startVal [time (s)] = 2
      size = (0.2, 0.2)
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 5
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    ImageComponent image
      stopVal [duration (s)] = 1.0
      pos = (0, 0.5)
      ori = 90
      startVal [time (s)] = 3.0
      image = C:\Users\JARS\Desktop\red.png
      size = (0.25, 0.25)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ..\BCI\common\conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('condition', u'exec_left'), ('img', u'common/red.png'), ('ori', 180)]),
      OrderedDict([('condition', u'exec_right'), ('img', u'common/red.png'), ('ori', 0)]),
      OrderedDict([('condition', u'img_left'), ('img', u'common/white.png'), ('ori', 180)]),
      OrderedDict([('condition', u'img_right'), ('img', u'common/white.png'), ('ori', 0)]),
      OrderedDict([('condition', u'imag_third'), ('img', u'common/white.png'), ('ori', 270)])]
    Routine trial
  LoopTerminator trials
